PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data filename = u'data/%s/%s' % (expInfo['Nombre'], expName)
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': '["","Derecha","Izquierda"]', 'COM': 'list(range(1,25))'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = paradigma
  keyboardBackend = ioHub
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Routines
  Routine Bienvenida
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $open('resources/TextosInstrucciones/1.Bienvenida.txt', encoding='utf-8').read()
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dia_tipico
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Gracias por participar
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        cont_inst += 1
    TextComponent instrucciones_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $open(f'resources/TextosInstrucciones/{cont_inst}.{instrucciones_filename[cont_inst]}.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grabacion_sin_estimulo
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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    ImageComponent image
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
  Routine lamina
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    ImageComponent image_2
      image [set every repeat] = $f"resources/{instrucciones_filename[cont_inst]}.jpg"
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
  Routine historia
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    CodeComponent code_4
      Code Type = Py
      Before Experiment:
        from audioRecorder import AudioRecorder
      Begin Experiment:
        puerto = 'COM' + expInfo['COM']
        cont_inst = -1
        instrucciones_filename = {
        0: "Bienvenida",
        1: "DiaTipico",
        2: "RecuerdoAgradable",
        3: "DescripcionDeLamina1",
        4: "DescripcionDeLamina2",
        5: "RenarracionDeHistoria",
        6: "LecturaDeParrafo",
        7: "VocalA",
        8: "Pataka",
        9: "CuestionarioYFin"
        }
        recorder = AudioRecorder(mic_id = 0, sample_rate = 48000, channels = 1, arduino_port = puerto)
      End Experiment:
        recorder._serial.close()
  Routine parrafo
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        $open(f'resources/TextoA.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora, por favor, cuénteme la historia con sus propias palabras. Brinde tanto detalle como sea posible

        Pulse ESPACIO para empezar a grabar
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instrucciones
  Routine instrucciones
  Routine grabacion_sin_estimulo
  Routine instrucciones
  Routine grabacion_sin_estimulo
  Routine instrucciones
  Routine lamina
  Routine instrucciones
  Routine lamina
  Routine instrucciones
  Routine historia
  Routine instrucciones2
  Routine grabacion_sin_estimulo
  Routine instrucciones
  Routine parrafo
  Routine instrucciones
  Routine grabacion_sin_estimulo
  Routine instrucciones
  Routine grabacion_sin_estimulo
  Routine instrucciones
